// Author: Etay Hay, 2011
//    Models of Neocortical Layer 5b Pyramidal Cells Capturing a Wide Range of
//    Dendritic and Perisomatic Active Properties
//    (Hay et al., PLoS Computational Biology, 2011) 
//
// Model of L5 Pyramidal Cell, constrained both for BAC firing and Current Step Firing
// Edited by Penelope Tir, to make it more like a granule cell neuron

{load_file("channels.ses")}

begintemplate passivebiophys
public biophys

proc biophys() { local spine_sec_ind
	
	forsec $o1.all {
		insert pas
		cm = 1
		Ra = 210 // Aradi and Holmes
		g_pas = 2.5e-05
		e_pas = -70 // -70 used in Aradi and Holmes model, -93 mV used in Williams paper
		insert extracellular
	}

	forsec $o1.somatic {
		//commented so that it can be passive for now
		//insert Ca
		//gtcabar_Ca = 0.0018
		//gncabar_Ca = 0
		//glcabar_Ca = 0
		//insert CadepK
		//gbkbar_CadepK = 0
		//gskbar_CadepK = 0

		//insert Na
		//gmax_Na = 0.12
		//insert fKDR
		//gmax_fKDR = 0.016
		//insert sKDR
		//gmax_sKDR = 0.003
		//ek = -85
		//ena = 45 // Aradi and Holmes
		
  }

	forsec $o1.apical {
	//Aradi and Holmes, values for "proximal" dendrites 
	//Models ~first 200 um in length, most accurate
	    insert Na
	      gmax_Na = 0.013
	    insert fKDR
	      gmax_fKDR = 0.004
	    insert sKDR
	      gmax_sKDR = 0.003
	}	
	
  forsec $o1.axonal {
  	insert Na
	gmax_Na = 0.21
    	insert fKDR
      	gmax_fKDR = 0.028
	}
}

endtemplate passivebiophys
